PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  consoleLoggingLevel = error
  expName = InstEmoReg
  keyboardBackend = PsychToolbox
  logging level = error
  runMode = 0
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Routines
  Routine up_reg_video
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    CodeComponent trials_code
      Code Type = Py
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      Begin Experiment:
        video_stim_trial_counter = 1 # Set trial counter to 1
        attention_check_visible = True # Make attention check question visible as default

        #preload videos
        video_paths = []
        #preloaded_movies = {}

        #read file paths
        trials_data = data.importConditions('video_stimuli_paths.xlsx')

        #for trial in trials_data:
        #video_path = trial['vid_path']
        #video_paths.append(video_path)
        #preload vid
        #preloaded_movies[video_path] = visual.MovieStim(win, video_path, noAudio=True)
      Begin Routine:
        #  Set variables for BIOPAC trigger code (disabled - no BIOPAC in this version)
        #movie_pulse_started = False
        #movie_pulse_ended = False
        #movie_end_pulse_started = False
        #movie_end_pulse_ended = False

        win.mouseVisible = False # Make mouse ivisible


        #get trials vid from trial handler
        current_video_path = vid_path

        #assign vid to movie component
        #movieStim = preloaded_movies[current_video_path]
        movieStim = current_video_path
        #movieStim.play()

        condition_name = "UpCondition"
      Each Frame:
        #Send trigger to Biopac indicating that the regulation instruction is being displayed
        #if up_movie.status == STARTED and not movie_pulse_started:
            #win.callOnFlip(ser.write, str.encode('08'))
            #movie_pulse_start_time = globalClock.getTime()
            #movie_pulse_started = True

        #if movie_pulse_started and not movie_pulse_ended:
            #if globalClock.getTime() - movie_pulse_start_time >= 0.005:
                #win.callOnFlip(ser.write, str.encode('00'))
                #movie_pulse_ended = True
      End Experiment:
        #clear memory used by preloaded movies
        #for video in preloaded_movies.values():
        #for video in video_paths.values()
         #   video.setAutoDraw(False)
          #  video.stop()
           # del video
      End Routine:
        #ser.write('RR'.encode('utf-8')) # reset port as closed

        # Store video path for this trial
        #trial_data[video_stim_trial_counter] = {
            #"condition" : condition_name,
            #"video_path": current_video_path,
            #"valenceRating": "",
            #"arousalRating": "",
            #"arousalConfidence": "",
            #"effortRating": ""
        #}
        #if the trial counter is a mulitple of 8, make the attention check routine condition variable true.
        if video_stim_trial_counter % 8 == 0:
            attention_check_visible = False
        else:
            attention_check_visible = True
        #count everytime the video trial routine is ended
        video_stim_trial_counter = video_stim_trial_counter + 1

        #stop and rest movie and audio
        #movieStim.stop()
        #movieStim.seek(0)
        #del movieStim
    MovieComponent up_movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $vid_path
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.00
      units = pix
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  Routine emo_stroop_instruct
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
      wrapWidth = 1.3
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      text:
        In this task you need to identify the emotion of the person in the image while ignoring the emotion word that is written on the screen.

        You will use the f and h keys on the keyboard to indicate what emotion the face is showing.

        Remember, ignore the word; press:
        f for fearful FACES
        h for happy FACES

        Before the task starts, you will complete 12 practice trials. During the practice, the keys will be shown at the bottom of the screen.

        Press any key to begin the practice
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine emo_stroop_trial
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    ImageComponent faceImage
      image [set every repeat] = $faceImagePath
      size = (1.11, 0.75)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    TextComponent word
      color = red
      letterHeight = 0.1
      pos = [0, -.01]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $emotionText
      units = height
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    KeyboardComponent resp
      allowedKeys = "h","f"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine affect_ratings
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    CodeComponent affect_slider_code
      Code Type = Py
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      Begin Experiment:
        # Prevent confidence question and continue button from being shown before affect rating is given
        affect_slider_q_answered = False
        affect_slider_allqs_answered = False
      Begin Routine:
        # Make mouse visibe
        mouse = event.Mouse(visible=True)

        # Reset marker colour
        affect_slider.marker.color='white'

        # Make confidence slider invisible if the valence question is being asked
        if slider_name=="valence":  # If the variable in the conditions file says this the valence question is being asked.
            affect_slider_confidence.setAutoDraw(False)  # Stop displaying the slider component
      Each Frame:
        # Changes marker colours
        if affect_slider.getRating() is not None:
            affect_slider.marker.color='grey'

        if slider_name == "valence": #If this is the valence slider
            if affect_slider.getRating() is not None:
                valenceRating = affect_slider.getRating()
                affect_slider_allqs_answered = True #Show the continue button as soon as a response has been given
        elif slider_name == "arousal": #If this is the arousal slider
            if affect_slider.getRating() is not None:
                arousalRating = affect_slider.getRating()
                affect_slider_q_answered = True #Show the confidence question after a response has been given
            if affect_slider_confidence.getRating() is not None:
                arousalConfidence = affect_slider_confidence.getRating()
                affect_slider_allqs_answered = True #Show the continue button when a confidence response has been given
      End Routine:
        #if slider_name == "valence":
            #trial_data[video_stim_trial_counter]["valenceRating"] = valenceRating
        #if slider_name == "arousal":
            #trial_data[video_stim_trial_counter]["arousalRating"] = arousalRating
            #trial_data[video_stim_trial_counter]["arousalConfidence"] = arousalConfidence

        affect_slider_allqs_answered = False
        affect_slider_q_answered = False
    TextComponent affect_slider_question_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How did you feel whilst watching this video?
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    ImageComponent affect_slider_intensity_image
      image = ../slider_images_light/AS_intensity_cue_light.png
      pos = (0.0, 0.04)
      size = (1.03, 0.06)
      startVal [time (s)] = 0.0
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    SliderComponent affect_slider
      borderColor = none
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      initVal = 1.5
      letterHeight = 0.05
      pos = (0.0, 0.1)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2)
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    ImageComponent affect_slider_low_image
      image [set every repeat] = $affect_low_path
      pos = (-0.6, 0.07)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent affect_slider_high_image
      image [set every repeat] = $affect_high_path
      pos = (0.6, 0.07)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent affect_slider_track
      image = ../slider_images_light/AS_track_light.png
      pos = (0, 0.103)
      size = (1.05, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent affect_slider_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [condition] = affect_slider_allqs_answered
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    MouseComponent affect_slider_mouse
      clickable = affect_slider_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = affect_slider_allqs_answered
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    TextComponent confidence_question_text
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [condition] = $affect_slider_q_answered
      text = How confident are you?
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    SliderComponent affect_slider_confidence
      borderColor = 0.6549, 0.6549, 0.6549
      fillColor = White
      forceEndRoutine = False
      granularity = 1
      labels = "0", "100"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.1, 0.05)
      startVal [condition] = affect_slider_q_answered
      styles = slider
      ticks = (0, 100)
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  Routine ready_routine
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    TextComponent read_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ready to begin?
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    ImageComponent ready_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 1
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    MouseComponent ready_mouse
      clickable = ready_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine video_end
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    TextComponent video_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for watching the videos. That part of the experiment is now complete.

        Next, you will be moving on to a cognitive task. Your performance in this task will determine the financial reward you receive. The better you perform, the higher your reward.

        Please take your time, focus, and do your best. Good luck!
    ImageComponent video_end_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 4
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    MouseComponent video_end_mouse
      clickable = video_end_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 4
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    CodeComponent video_end_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True

        if loopRepeat == 1:
            breakVisible = False
        elif loopRepeat == 2:
            breakVisible = False
        elif loopRepeat == 3:
            breakVisible = True
  Routine emo_stroop_countdown
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    TextComponent GetReadyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please place your fingers on the f and h key, the task will begin in...
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    TextComponent countdownText
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent countdown_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False

        # Start the countdown from 5
        countdown_time = 10
      Each Frame:
        # Update the countdown each frame
        # 't' is the time within the routine

        if t >= countdown_time:  # After countdown reaches 0
            countdownText.text = "0 seconds"
        else:
            countdownText.text = f"{int(countdown_time - t)} seconds"
  Routine down_reg_video
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    MovieComponent down_movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $vid_path
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.00
      units = pix
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    CodeComponent trials_code_2
      Code Type = Py
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      Begin Experiment:
        video_stim_trial_counter = 1 # Set trial counter to 1
        attention_check_visible = True # Make attention check question visible as default

        #preload videos
        video_paths = []
        #preloaded_movies = {}

        #read file paths
        trials_data = data.importConditions('video_stimuli_paths.xlsx')

        #for trial in trials_data:
        #video_path = trial['vid_path']
        #video_paths.append(video_path)
        #preload vid
        #preloaded_movies[video_path] = visual.MovieStim(win, video_path, noAudio=True)
      Begin Routine:
        #  Set variables for BIOPAC trigger code (disabled - no BIOPAC in this version)
        #movie_pulse_started = False
        #movie_pulse_ended = False
        #movie_end_pulse_started = False
        #movie_end_pulse_ended = False

        win.mouseVisible = False # Make mouse ivisible


        #get trials vid from trial handler
        current_video_path = vid_path

        #assign vid to movie component
        #movieStim = preloaded_movies[current_video_path]
        movieStim = current_video_path
        #movieStim.play()

        condition_name = "DownCondition"
      Each Frame:
        #Send trigger to Biopac indicating that the regulation instruction is being displayed
        #if down_movie.status == STARTED and not movie_pulse_started:
            #win.callOnFlip(ser.write, str.encode('01'))
            #movie_pulse_start_time = globalClock.getTime()
            #movie_pulse_started = True

        #if movie_pulse_started and not movie_pulse_ended:
            #if globalClock.getTime() - movie_pulse_start_time >= 0.005:
                #win.callOnFlip(ser.write, str.encode('00'))
                #movie_pulse_ended = True
      End Experiment:
        #clear memory used by preloaded movies
        #for video in preloaded_movies.values():
        #for video in video_paths.values()
         #   video.setAutoDraw(False)
          #  video.stop()
           # del video
      End Routine:
        #ser.write('RR'.encode('utf-8')) # reset port as closed

        # Store video path for this trial
        #trial_data[video_stim_trial_counter] = {
            #"condition" : condition_name,
            #"video_path": current_video_path,
            #"valenceRating": "",
            #"arousalRating": "",
            #"arousalConfidence": "",
            #"effortRating": ""
        #}

        #if the trial counter is a mulitple of 8, make the attention check routine condition variable true.
        if video_stim_trial_counter % 8 == 0:
            attention_check_visible = False
        else:
            attention_check_visible = True
        #count everytime the video trial routine is ended
        video_stim_trial_counter = video_stim_trial_counter + 1

        #stop and rest movie and audio
        #movieStim.stop()
        #movieStim.seek(0)
        #del movieStim
  Routine down_corsi_block_instructions
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    TextComponent corsi_instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you need to remember the order that the blocks light up.

        Some of the blocks will flash red. Once they have stoppd flashing, you must click the blocks in the order that they flashed.

        It will start with 3 blocks. The more you get correct, the more blocks there will be to remember in the next iteration of the task.
    ImageComponent corsi_instruct_continue_image_2
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 3
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    MouseComponent corsi_instruct_mouse_2
      clickable = corsi_instruct_continue_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3
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    CodeComponent corsi_instruct_code
      Code Type = Py
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      Begin Experiment:
        win.mouseVisible = True
  Routine ISI
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    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    CodeComponent setLocations
      Code Type = Py
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      Begin Experiment:
        # start with 3 coloured blocks
        nBlocks = 3
      Begin Routine:
        # create 9 blocks that shows sequence
        blocks = [blk1_3, blk2_3, blk3_3, blk4_3, blk5_3, blk6_3, blk7_3, blk8_3, blk9_3]

        # create 9 response blocks
        respond_blocks = [blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9]

        # set the required number of blocks to visible
        block_order = []
        correct_order = []
        respond_block_order = []
        for block in range(nBlocks):
            blocks[block].setColor('white')
            respond_blocks[block].setColor('white')
            # responses will be saved as string so we need the correct answer to be in string format
            correct_order.append(respond_blocks[block].name)
            # populate list with coloured block sequence
            block_order.append(blocks[block])
            respond_block_order.append(respond_blocks[block])
        print("block_order", block_order)
        print("correct_order", correct_order)
        print("respond_block_order", respond_block_order)

        # set the position of blocks to be random
        # preset some random locations so that the boxes never overlap
        xys = [[0.25625, 0.0975], [0.0675, 0.07375], [-0.09875, 0.065], [-0.26625, 0.235], [0.22, 0.2425], [0.16625, 0.3825], [-0.18625, 0.41125], [-0.01875, 0.235], [-0.3575, -0.05625], [-0.12125, -0.12625], [0.05875, -0.0575], [0.19375, -0.17125], [0.30125, -0.0175], [0.4125, -0.1325], [0.365, -0.27625], [-0.01125, -0.295], [-0.285, -0.27125], [-0.4075, 0.11875], [-0.485, 0.34625], [0.4625, 0.35875], [0.45375, 0.175], [0.54, 0.03625], [0.62875, -0.1825], [0.57875, -0.31375], [-0.45875, -0.3], [-0.55125, -0.13375], [-0.6025, 0.0725], [-0.675, 0.29875], [-0.68625, -0.225], [0.03125, -0.41], [0.1925, -0.295], [-0.16125, -0.28], [-0.24625, 0.04375], [-0.0225, 0.395], [0.28875, 0.39875], [0.6375, 0.27375], [-0.35125, 0.36625]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []
        for block in blocks:
            # keep the same block positions
            block.setPos([xys[count][0], xys[count][1]])
            respond_blocks[count].setPos([xys[count][0], xys[count][1]])

            positions.append(xys[count])

            count += 1

        # save positions used to csv output
        thisExp.addData('positions', positions)
  Routine corsi_present
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    CodeComponent setColor
      Code Type = Py
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      Begin Routine:
        # set the block to red
        block_order[block_sequence.thisN].fillColor = [1, 0, 0]
        print(block_order[block_sequence.thisN].pos)
        print(block_order[block_sequence.thisN].opacity)
      End Routine:
        # reset the block colour
        block_order[block_sequence.thisN].fillColor = [1, 1, 1]
    PolygonComponent blk1_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk2_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk3_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk4_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk5_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk6_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk7_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk8_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk9_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine corsi_respond
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    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse
      clickable = blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct
      Code Type = Py
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        #mouse visible
        mouse = event.Mouse(visible=True)

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse.clicked_name)==nBlocks:
            show = True

        if corsi_mouse.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0

        for name in order_clicked:
            # Check if count is within the bounds of correct_order
            if count < len(correct_order):
                if name == correct_order[count]:
                    correct_list.append(1)  # Add value of 1 if block clicked matches the correct order
                else:
                    correct_list.append(0)  # Add 0 if no match
            else:
                correct_list.append(0)  # Add 0 if count is out of bounds
            count += 1
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        # increase number of blocks if they get it correct
        if correct:
            nBlocks += 1


        # cap the number of blocks at the max number
        if nBlocks > len(blocks):
            nBlocks = len(blocks)
    TextboxComponent submit_button
      bold = False
      borderColor = white
      editable = False
      fillColor = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine down_feedback
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    CodeComponent fbcode
      Code Type = Py
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      Begin Routine:
        # if the sequence clicked was correct
        if correct:
            thisfb = 'Correct!'
            fbcol = 'green'
        else: # if the sequence clicked was wrong
            thisfb = 'Incorrect!'
            fbcol = 'red'
    TextComponent fbtxt
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $thisfb
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    CodeComponent reset_col_code
      Code Type = Py
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      Begin Routine:
        # reset the colour of all blocks in prep for next trial
        for block in respond_blocks:
            block.fillColor = [1 ,1, 1]

        for block in blocks:
            block.fillColor = [1 ,1, 1]
    CodeComponent end_task
      Code Type = Auto->JS
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      Begin Experiment:
        incorrect_count = 0
      End Routine:
        if not correct:
            incorrect_count += 1

        if incorrect_count > 3:
            corsi_task.finished = True
  Routine corsi_end
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    TextComponent corsi_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your maximum blocks remembered was: ' + str(nBlocks-1)
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    ImageComponent corsi_end_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 3
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    MouseComponent corsi_end_mouse
      clickable = corsi_end_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3
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  Routine loop_order_code
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    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        #import os

        #loopOrder = "ControlUpDown"
        #loopOrder = "ControlDownUp"
        #loopOrder = "UpDownControl"
        #loopOrder = "UpControlDown"
        loopOrder = "DownControlUp"
        #loopOrder = "DownUpControl"
      Begin Experiment:
        # --- Automatic condition allocation ---
        # Group (timing/strategy) and loopOrder come from the pre-shuffled list in
        # data/allocation.csv (made once with scripts/make_allocation_list.py).
        # Each new participant ID takes the next free row. Re-running the same ID on
        # the same day reuses that row, so a crash or restart does not use up a slot.
        import csv
        import datetime
        ORDERS = ['ControlUpDown', 'ControlDownUp', 'UpDownControl', 'UpControlDown', 'DownControlUp', 'DownUpControl']
        GROUPS = ['timing', 'strategy']
        alloc_path = os.path.join(_thisDir, 'data', 'allocation.csv')
        pid = str(expInfo['participant']).strip()
        if not pid:
            raise RuntimeError('The participant ID is empty. Run the experiment again and enter the ID.')

        if PILOTING:
            # pilot runs never use up a row
            group = str(randchoice(GROUPS))
            loopOrder = str(randchoice(ORDERS))
            alloc_slot = 'pilot'
        else:
            if not os.path.exists(alloc_path):
                raise RuntimeError('Allocation list not found: ' + alloc_path + '. Do not create a new one. Tell Carmen.')
            with open(alloc_path, newline='', encoding='utf-8') as f:
                alloc_rows = list(csv.DictReader(f))
            alloc_fields = list(alloc_rows[0].keys())
            today = datetime.date.today().isoformat()
            mine = [r for r in alloc_rows if r['participant'] == pid]
            if mine:
                row = mine[0]
                if not row['claimed_at'].startswith(today):
                    raise RuntimeError('Participant ID ' + pid + ' was already used on ' + row['claimed_at'] + '. Check the ID with the participant. If it is correct, tell Carmen.')
            else:
                free = [r for r in alloc_rows if not r['participant']]
                if not free:
                    raise RuntimeError('The allocation list is full. Tell Carmen.')
                row = free[0]
                row['participant'] = pid
                row['claimed_at'] = datetime.datetime.now().isoformat(timespec='seconds')
                tmp_path = alloc_path + '.tmp'
                with open(tmp_path, 'w', newline='', encoding='utf-8') as f:
                    w = csv.DictWriter(f, fieldnames=alloc_fields)
                    w.writeheader()
                    w.writerows(alloc_rows)
                os.replace(tmp_path, alloc_path)
            group = row['group']
            loopOrder = row['loopOrder']
            alloc_slot = row['slot']

        assert group in GROUPS, 'Unknown group: ' + str(group)
        assert loopOrder in ORDERS, 'Unknown loopOrder: ' + str(loopOrder)
        # saved as columns on every row of the data file
        expInfo['group'] = group
        expInfo['loopOrder'] = loopOrder
        expInfo['allocation_slot'] = alloc_slot

        loopRepeat = 1
        downRegReps = 1
        upRegReps = 1
        controlRegReps = 1

        # Create data file

        # Get participant ID
        #participant_id = expInfo['participant']

        # Define filename
        #filename = f"{participant_id}_data_output.csv"

        # Create the file with a header if it doesn’t exist
        #file_path = os.path.join(os.getcwd(), filename)
        #if not os.path.exists(file_path):
            #with open(file_path, 'w') as file:
                #file.write("trial,condition,video_path,valenceRating,arousalRating,arousalConfidence,effortRating\n")  # Adjust headers as needed

        # Dictionary to store trial data before writing
        #trial_data = {}

        # Assign Variables
        valenceRating = ""
        arousalRating = ""
        arousalConfidence = ""
        effortRating = ""
      Begin Routine:
        if loopOrder == "ControlUpDown":
            if loopRepeat == 1:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1
            elif loopRepeat == 2:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0
            elif loopRepeat == 3:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0

        elif loopOrder == "ControlDownUp":
            if loopRepeat == 1:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1
            elif loopRepeat == 2:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0
            elif loopRepeat == 3:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0

        elif loopOrder == "UpDownControl":
            if loopRepeat == 1:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0
            elif loopRepeat == 2:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0
            elif loopRepeat == 3:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1

        elif loopOrder == "UpControlDown":
            if loopRepeat == 1:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0
            elif loopRepeat == 2:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1
            elif loopRepeat == 3:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0

        elif loopOrder == "DownControlUp":
            if loopRepeat == 1:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0
            elif loopRepeat == 2:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1
            elif loopRepeat == 3:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0

        elif loopOrder == "DownUpControl":
            if loopRepeat == 1:
                upRegReps = 0
                downRegReps = 1
                controlRegReps = 0
            elif loopRepeat == 2:
                upRegReps = 1
                downRegReps = 0
                controlRegReps = 0
            elif loopRepeat == 3:
                upRegReps = 0
                downRegReps = 0
                controlRegReps = 1
  Routine loop_counter
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        loopRepeat = loopRepeat + 1
  Routine attention_check
    RoutineSettingsComponent attention_check
      skipIf = attention_check_visible
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    TextComponent up_attention_check_question_text
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $att_check_question
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    PolygonComponent yes_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 3
      pos = (-0.3, -0.1)
      shape = rectangle
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent yes
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      text = Yes
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    PolygonComponent no_box
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 3
      pos = (0.3, -0.1)
      shape = rectangle
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent no
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      text = No
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    MouseComponent att_check_mouse
      clickable = yes_box, no_box
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instruct_affect_rating
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    CodeComponent instruct_affect_code
      Code Type = Py
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      Begin Routine:
        # Reset marker colour
        instruct_AR_slider.marker.color='white'
        instruct_VA_slider.marker.color='white'

        all_qs_answered = False
      Each Frame:
        if instruct_AR_slider.getRating() is not None:
            instruct_AR_slider.marker.color='grey'

        if instruct_VA_slider.getRating() is not None:
            instruct_VA_slider.marker.color='grey'

        if instruct_AR_slider.getRating() is not None and instruct_VA_slider.getRating() is not None:
            all_qs_answered = True
    TextComponent instruct_affect_rating_text
      letterHeight = 0.04
      pos = (0, 0.27)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        After watching each video, you will rate how you felt using the following two scales.

        How do you feel right now?
    ImageComponent instruct_intensity_image_AR
      image = ../slider_images_light/AS_intensity_cue_light.png
      pos = (0, -0.06)
      size = (1.03, 0.06)
      startVal [time (s)] = 0.0
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    SliderComponent instruct_AR_slider
      borderColor = none
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      initVal = 1.5
      letterHeight = 0.05
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2)
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    ImageComponent instruct_AR_low_image
      image = ../slider_images_light/AS_sleepy_light.png
      pos = (-0.6, -0.03)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_AR_high_image
      image = ../slider_images_light/AS_wideawake_light.png
      pos = (0.6, -0.03)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_intensity_image_VA
      image = ../slider_images_light/AS_intensity_cue_light.png
      pos = (0, -0.26)
      size = (1.01, 0.06)
      startVal [time (s)] = 0.0
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    SliderComponent instruct_VA_slider
      borderColor = none
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      initVal = 1.5
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2)
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    ImageComponent instruct_VA_low_image
      image = ../slider_images_light/AS_unhappy_light.png
      pos = (-0.6, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_VA_high_image
      image = ../slider_images_light/AS_happy_light.png
      pos = (0.6, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_AR_slider_track
      image = ../slider_images_light/AS_track_light.png
      pos = (0, 0.003)
      size = (1.05, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_VA_slider_track
      image = ../slider_images_light/AS_track_light.png
      pos = (0, -0.197)
      size = (1.05, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent instruct_affect_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [condition] = all_qs_answered
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    MouseComponent instruct_affect_mouse
      clickable = instruct_affect_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = all_qs_answered
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  Routine instruct_questions
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    CodeComponent instruct_question_code
      Code Type = Py
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      Begin Experiment:
        #Tracks whether all questions on this screen have been answered
        instruct_question_answered = False
      Begin Routine:
        instruct_question_answered = False
      Each Frame:
        #When all sliders have been answered, show the continue button
        if instruct_motivation_slider.getRating() is not None and instruct_told_slider.getRating() is not None and instruct_believe_slider.getRating() is not None:
            instruct_question_answered = True
      End Routine:
        # Comprehension check: the "I was told..." answer must match what the
        # instructions said (toldCorrect comes from the instructions conditions file).
        # The surrounding comprehension loop repeats the instructions until it is correct.
        told_correct = instruct_told_slider.getRating() == toldCorrect
        if PILOTING and instruct_told_slider.getRating() is None:
            told_correct = True  # skipped with Tab while piloting
        thisExp.addData('told_correct', told_correct)
        if told_correct:
            currentLoop.finished = True
    TextComponent instruct_question_text_1
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Please answer the following questions:

        I am motivated to perform well in the upcoming cognitive task.
    SliderComponent instruct_motivation_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Strongly  Disagree","","","","","","Strongly    Agree"]
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent instruct_told_text
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = I was told that experiencing intense emotions while watching the upcoming set of videos would ___ my performance on the task.
      wrapWidth = 1.75
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    SliderComponent instruct_told_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Impair", "Have no effect on", "Improve"]
      letterHeight = 0.03
      pos = (0, 0.0)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    TextComponent instruct_believe_text
      letterHeight = 0.035
      pos = (0, -0.165)
      startVal [time (s)] = 0.0
      text = How do you think experiencing intense emotions while watching the upcoming set of videos will affect your performance on the task?
      wrapWidth = 1.75
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    SliderComponent instruct_believe_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Greatly\nimpairs","", "", "No effect", "", "", "Greatly\nimproves"]
      letterHeight = 0.03
      pos = (0, -0.255)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent instruct_question_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.44)
      size = (0.4, 0.08)
      startVal [condition] = instruct_question_answered
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    MouseComponent instruct_question_mouse
      clickable = instruct_question_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = instruct_question_answered
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  Routine volume_test
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    TextComponent volume_adjust_test
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this experiment, you will watch videos that have audio tracks. It's important that you can hear the audio properly.

        Click the button below to play track of people speaking. Adjust the volume until you can clearly and comfortably hear what they are saying and then press continue.
    MovieComponent volume_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = ../volume_test/voice_test.mp4
      pos = (0, 0.4)
      size = (0.001, 0.001)
      startVal [condition] = play_sound
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    ImageComponent continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [condition] = continue_button_appear
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    MouseComponent mouse
      clickable = continue_image
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = continue_button_appear
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    ImageComponent play_image_object
      image = ../volume_test/play_image.png
      pos = (0, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
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    CodeComponent volume_adjust_code
      Code Type = Py
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      Begin Experiment:
        #import serial

        #ser = serial.Serial("COM3",115200, timeout=1, bytesize=8, stopbits=1) # This must alwaus be used before sending any triggers, it specifies the settings for the serial port.Exact settings should be customised to your specific port
        #ser.open # Open the port
        #ser.write('RR'.encode()) # Reset the port so that its ready for the first trigger
      Begin Routine:
        # Set conditionitional object creation vaiables to false
        play_sound = False
        continue_button_appear = False
      Each Frame:
        # Play sound when play button is pressed
        if play_mouse.isPressedIn(play_image_object):
            play_sound = True
            continue_button_appear = True
    CodeComponent tab_skip_code
      Code Type = Py
      Begin Experiment:
        # Press Tab to skip the current routine (pilot mode only).
        # Every routine checks for Escape once per frame; this wraps that check so a
        # Tab press marks all of the current routine's components as finished, which
        # ends the routine normally (end-routine code and data saving still run).
        TAB_SKIP_ENABLED = PILOTING
        if TAB_SKIP_ENABLED:
            _currentRoutine = [None]
            _routineInit = data.Routine.__init__
            def _trackRoutine(self, *args, **kwargs):
                _routineInit(self, *args, **kwargs)
                _currentRoutine[0] = self
            data.Routine.__init__ = _trackRoutine

            _escapeGetKeys = defaultKeyboard.getKeys
            def _getKeysWithTabSkip(keyList=None, **kwargs):
                if keyList != ["escape"]:
                    return _escapeGetKeys(keyList=keyList, **kwargs)
                keys = _escapeGetKeys(keyList=["escape", "tab"], **kwargs)
                routine = _currentRoutine[0]
                if routine is not None and any(k.name == "tab" for k in keys):
                    for comp in routine.components:
                        if hasattr(comp, "status"):
                            comp.status = FINISHED
                    routine.forceEnded = True  # so non-slip routines reset their timer
                return [k for k in keys if k.name != "tab"]
            defaultKeyboard.getKeys = _getKeysWithTabSkip
    MouseComponent play_mouse
      clickable = play_image_object
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine break_routine
    RoutineSettingsComponent break_routine
      skipIf = breakVisible
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You have completed this section of the experiment!

        Please take a short break..
    TextComponent break_text_countdown
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent break_countdown_code
      Code Type = Py
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      Begin Routine:
        # Start the countdown from 5
        countdown_time = 60
      Each Frame:
        # Update the countdown each frame
        # 't' is the time within the routine

        if t >= countdown_time:  # After countdown reaches 0
            break_text_countdown.text = "0 seconds"
        else:
            break_text_countdown.text = f"{int(countdown_time - t)} seconds"
  Routine instruct_introduction
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    TextComponent instruct_text
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructionText
      wrapWidth = 1.5
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    ImageComponent instruct_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 20
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    MouseComponent instruct_mouse
      clickable = instruct_continue_image
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 20
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    CodeComponent instruct_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        instruct_text.alignText = 'left'
  Routine inter_stimulus_intervention
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    PolygonComponent isi_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine control_video
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    MovieComponent control_movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $vid_path
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.00
      units = pix
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    CodeComponent control_trials_code
      Code Type = Py
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      Begin Experiment:
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      Begin Routine:
        #  Set variables for BIOPAC trigger code (disabled - no BIOPAC in this version)
        #movie_pulse_started = False
        #movie_pulse_ended = False
        #movie_end_pulse_started = False
        #movie_end_pulse_ended = False

        win.mouseVisible = False # Make mouse ivisible


        #get trials vid from trial handler
        current_video_path = vid_path

        #assign vid to movie component
        #movieStim = preloaded_movies[current_video_path]
        movieStim = current_video_path
        #movieStim.play()

        condition_name = "ControlCondition"
      Each Frame:
        #Send trigger to Biopac indicating that the regulation instruction is being displayed
        #if control_movie.status == STARTED and not movie_pulse_started:
            #win.callOnFlip(ser.write, str.encode('04'))
            #movie_pulse_start_time = globalClock.getTime()
            #movie_pulse_started = True

        #if movie_pulse_started and not movie_pulse_ended:
            #if globalClock.getTime() - movie_pulse_start_time >= 0.005:
                #win.callOnFlip(ser.write, str.encode('00'))
                #movie_pulse_ended = True
      End Experiment:
        #clear memory used by preloaded movies
        #for video in preloaded_movies.values():
        #for video in video_paths.values()
         #   video.setAutoDraw(False)
          #  video.stop()
           # del video
      End Routine:
        #ser.write('RR'.encode('utf-8')) # reset port as closed


        # Store video path for this trial
        #trial_data[video_stim_trial_counter] = {
            #"condition" : condition_name,
            #"video_path": current_video_path,
            #"valenceRating": "",
            #"arousalRating": "",
            #"arousalConfidence": "",
            #"effortRating": ""
        #}
        #if the trial counter is a mulitple of 8, make the attention check routine condition variable true.
        if video_stim_trial_counter % 8 == 0:
            attention_check_visible = False
        else:
            attention_check_visible = True
        #count everytime the video trial routine is ended
        video_stim_trial_counter = video_stim_trial_counter + 1

        #stop and rest movie and audio
        #movieStim.stop()
        #movieStim.seek(0)
        #del movieStim
  Routine after_control_break
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    CodeComponent control_break_countdown_code
      Code Type = Py
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      Begin Routine:
        # Start the countdown from 30
        countdown_time = 60
      Each Frame:
        # Update the countdown each frame
        # 't' is the time within the routine

        if t >= countdown_time:  # After countdown reaches 0
            control_break_text_countdown.text = "0 seconds"
        else:
            control_break_text_countdown.text = f"{int(countdown_time - t)} seconds"
    TextComponent control_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You have completed the first part of the experiment

        Please take a short break.

        The experiment will continue to the next task in 60 seconds.
    TextComponent control_break_text_countdown
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine effort_rating
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    CodeComponent effort_slider_code
      Code Type = Py
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      Begin Experiment:
        # Prevent confidence question and continue button from being shown before affect rating is given
        effort_slider_q_answered = False
        effort_slider_allqs_answered = False
      Begin Routine:
        # Make mouse visibe
        mouse = event.Mouse(visible=True)

        # Reset marker colour
        effort_slider.marker.color='white'
      Each Frame:
        # Changes marker colours
        if effort_slider.getRating() is not None:
            effortRating = effort_slider.getRating()
            effort_slider.marker.color='grey'
            effort_slider_allqs_answered = True #Show the continue button as soon as a response has been given
      End Routine:
        #trial_data[video_stim_trial_counter]["effortRating"] = effortRating

        # Write to file now that we have all data for the trial
        #with open(file_path, 'a') as file:
            #file.write(f"{video_stim_trial_counter},{trial_data[video_stim_trial_counter]['condition']},{trial_data[video_stim_trial_counter]['video_path']},{trial_data[video_stim_trial_counter]['valenceRating']},{trial_data[video_stim_trial_counter]['arousalRating']},{trial_data[trials.thisN]['arousalConfidence']},{trial_data[video_stim_trial_counter]['effortRating']}\n")

        # Remove trial from dictionary after writing
        #del trial_data[video_stim_trial_counter]


        effort_slider_allqs_answered = False
        effort_slider_q_answered = False
    TextComponent affect_slider_question_text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How effortful was it to watch the video?
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    SliderComponent effort_slider
      borderColor = none
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      initVal = 1.5
      letterHeight = 0.05
      pos = (0.0, 0.1)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2)
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    ImageComponent effort_slider_track
      image = ../slider_images_light/AS_track_light.png
      pos = (0, 0.103)
      size = (1.05, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent effort_slider_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [condition] = effort_slider_allqs_answered
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    MouseComponent effort_slider_mouse
      clickable = effort_slider_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = effort_slider_allqs_answered
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    TextComponent no_effort_text
      letterHeight = 0.05
      pos = (-0.6, 0.04)
      startVal [time (s)] = 0.0
      text = No effort
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    TextComponent alot_of_effort_text
      letterHeight = 0.05
      pos = (0.6, 0.04)
      startVal [time (s)] = 0.0
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      text:
        A lot
        of effort
  Routine experiment_end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Thank you!

        That is the end of the experiment.

        Please let the experimenter know you have completed the study.
  Routine stroop_instruct
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    TextComponent stroop_instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        In this task you need to identify the colour of the word on the screen whilst ignoring the actual word itself.

        You will use the arrow keys on the keyboard to indicate what colour the word on the screen is.

        Remeber, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS

        Before the task starts, you will complete 18 practice trials. During the practice, the keys will be shown at the bottom of the screen.

        Press any key to begin the practice
    KeyboardComponent stroop_ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine stroop_trial
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    TextComponent stroop_word
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent stroop_resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine baseline_beliefs
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    CodeComponent baseline_code
      Code Type = Py
      Begin Experiment:
        baseline_answered = False
      Begin Routine:
        win.mouseVisible = True
        baseline_answered = False
      Each Frame:
        # Show the continue button once every question on this screen is answered
        if baseline_belief_slider.getRating() is not None and baseline_control_slider.getRating() is not None:
            baseline_answered = True
    TextComponent baseline_intro_text
      letterHeight = 0.035
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        In this study you will complete some cognitive tasks. These are short computer tasks that measure things like attention, memory and how quickly you can respond.

        Before we begin, please answer the following questions.
    TextComponent baseline_belief_text
      letterHeight = 0.035
      pos = (0, 0.16)
      startVal [time (s)] = 0.0
      text = How do you think experiencing intense emotions affects your performance on tasks like these?
      wrapWidth = 1.6
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    SliderComponent baseline_belief_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Greatly\nimpairs","", "", "No effect", "", "", "Greatly\nimproves"]
      letterHeight = 0.03
      pos = (0, 0.09)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent baseline_control_text
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = How much can people control how intensely they feel emotions?
      wrapWidth = 1.6
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    SliderComponent baseline_control_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all", "", "", "", "", "", "Completely"]
      letterHeight = 0.03
      pos = (0, -0.17)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent baseline_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.43)
      size = (0.4, 0.08)
      startVal [condition] = baseline_answered
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    MouseComponent baseline_mouse
      clickable = baseline_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = baseline_answered
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  Routine general_instructions
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    CodeComponent general_instr_code
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
    TextComponent general_instr_text
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        In this experiment, you will complete three different cognitive tasks. In addition to receiving course credit, you can earn a financial reward. The better you perform on the cognitive tasks, the larger your financial reward.

        Before each cognitive task, you will watch a set of emotional videos for about 10 minutes. These videos are designed to influence your emotional state.
    ImageComponent general_instr_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.43)
      size = (0.4, 0.08)
      startVal [time (s)] = 10
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    MouseComponent general_instr_mouse
      clickable = general_instr_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 10
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  Routine post_video_checks
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    CodeComponent post_video_code
      Code Type = Py
      Begin Experiment:
        post_video_answered = False
      Begin Routine:
        win.mouseVisible = True
        post_video_answered = False
      Each Frame:
        # Show the continue button once every question on this screen is answered
        if pv_attempt_slider.getRating() is not None and pv_effort_slider.getRating() is not None:
            post_video_answered = True
    TextComponent pv_attempt_text
      letterHeight = 0.035
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = While watching the videos, did you try to change how intensely you felt?
      wrapWidth = 1.6
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    SliderComponent pv_attempt_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["Tried to feel less", "Did not try to change it", "Tried to feel more"]
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    TextComponent pv_effort_text
      letterHeight = 0.035
      pos = (0, -0.02)
      startVal [time (s)] = 0.0
      text = How much effort did you put into changing how you felt?
      wrapWidth = 1.6
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    SliderComponent pv_effort_slider
      forceEndRoutine = False
      granularity = 1
      labels = ["None", "", "", "", "", "", "A great deal"]
      letterHeight = 0.03
      pos = (0, -0.09)
      size = (1.25, 0.05)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent post_video_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.43)
      size = (0.4, 0.08)
      startVal [condition] = post_video_answered
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    MouseComponent post_video_mouse
      clickable = post_video_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = post_video_answered
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  Routine post_video_strategy
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    CodeComponent pv_strategy_code
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
        # clear the answer typed in the previous block
        pv_strategy_box.text = ''
    TextComponent pv_strategy_text
      letterHeight = 0.035
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        What, if anything, did you do to change how you felt while watching the videos?

        Click in the box and type your answer, then click continue. If you did nothing, type "nothing".
    TextboxComponent pv_strategy_box
      alignment = top-left
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.035
      pos = (0, 0.0)
      size = (1.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent pv_strategy_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.43)
      size = (0.4, 0.08)
      startVal [time (s)] = 3
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    MouseComponent pv_strategy_mouse
      clickable = pv_strategy_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3
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  Routine demand_probe_1
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    CodeComponent demand_code_1
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
    TextComponent demand_text_1
      letterHeight = 0.035
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        What do you think this study was testing?

        Click in the box and type your answer, then click continue.
    TextboxComponent demand_box_1
      alignment = top-left
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.035
      pos = (0, 0.0)
      size = (1.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent demand_1_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.43)
      size = (0.4, 0.08)
      startVal [time (s)] = 3
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    MouseComponent demand_1_mouse
      clickable = demand_1_continue_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3
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  Routine instruct_incorrect
    RoutineSettingsComponent instruct_incorrect
      skipIf = told_correct
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    TextComponent instruct_incorrect_text
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You answered the following question incorrectly:

        "I was told that experiencing intense emotions while watching the upcoming set of videos would ___ my performance on the task."

        On the next page you will see the information again. Please read it carefully, then answer the questions again.
    ImageComponent instruct_incorrect_continue_image
      image = ../click_to_continue.png
      pos = (0, -0.4)
      size = (0.4, 0.08)
      startVal [time (s)] = 2
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    MouseComponent instruct_incorrect_mouse
      clickable = instruct_incorrect_continue_image
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 2
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    CodeComponent instruct_incorrect_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        instruct_text.alignText = 'left'
  Routine stroop_practice_trial
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    TextComponent stroop_practice_stroop_word
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent stroop_practice_stroop_resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent stroop_practice_keys
      letterHeight = 0.035
      pos = (0, -0.44)
      startVal [time (s)] = 0
      text = Left = red          Down = green          Right = blue
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    CodeComponent stroop_practice_code
      Code Type = Auto->JS
      Begin Experiment:
        # pick 18 rows of the conditions file for the practice trials (used as the
        # practice loop's Selected rows): 18 different rows if the file has enough,
        # otherwise every row repeated equally (6 rows -> each 3 times)
        stroop_practice_rows = [int(i) for i in np.resize(
            np.random.permutation(len(data.importConditions('strooptrialTypes.xlsx'))), 18)]
      Begin Routine:
        # reset the correct-answer count at the start of each practice round
        if stroop_practice_trials.thisN == 0:
            stroop_practice_n_correct = 0
    TextComponent stroop_practice_target
      letterHeight = 0.035
      pos = (0, 0.44)
      startVal [time (s)] = 0
      text = Respond to the COLOUR of the letters, not the word
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  Routine stroop_practice_end
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    TextComponent stroop_practice_end_stroop_instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        The practice is now finished.

        The real task will now begin. The keys will no longer be shown on the screen.

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS

        Press any key to begin the task
    KeyboardComponent stroop_practice_end_stroop_ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine emo_stroop_practice_trial
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    ImageComponent emo_stroop_practice_faceImage
      image [set every repeat] = $faceImagePath
      size = (1.11, 0.75)
      startVal [time (s)] = 1
      stopVal [duration (s)] = emo_stroop_practice_face_dur
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    TextComponent emo_stroop_practice_word
      color = red
      letterHeight = 0.1
      pos = [0, -.01]
      startVal [time (s)] = 1
      stopVal [duration (s)] = emo_stroop_practice_face_dur
      text [set every repeat] = $emotionText
      units = height
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    KeyboardComponent emo_stroop_practice_resp
      allowedKeys = "h","f"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent emo_stroop_practice_keys
      letterHeight = 0.035
      pos = (0, -0.44)
      startVal [time (s)] = 0
      text = f = fearful          h = happy
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    CodeComponent emo_stroop_practice_code
      Code Type = Auto->JS
      Begin Experiment:
        # pick 12 rows of the conditions file for the practice trials (used as the
        # practice loop's Selected rows): 12 different rows if the file has enough,
        # otherwise every row repeated equally (e.g. 6 rows -> each twice)
        emo_stroop_practice_rows = [int(i) for i in np.resize(
            np.random.permutation(len(data.importConditions('trialTypes.xlsx'))), 12)]
      Begin Routine:
        # reset the correct-answer count at the start of each practice round
        if emo_stroop_practice_trials.thisN == 0:
            emo_stroop_practice_n_correct = 0
        # first 6 practice trials: face and word stay until a key is pressed;
        # last 6: shown for 1 s, like the real task
        emo_stroop_practice_face_dur = 999 if emo_stroop_practice_trials.thisN < 6 else 1.0
    TextComponent emo_stroop_practice_target
      letterHeight = 0.035
      pos = (0, 0.44)
      startVal [time (s)] = 0
      text = Respond to the emotion of the FACE, not the word
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  Routine emo_stroop_practice_end
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    TextComponent emo_stroop_practice_end_instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
      wrapWidth = 1.3
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      text:
        The practice is now finished.

        The real task will now begin. The keys will no longer be shown on the screen.

        Remember, ignore the word; press:
        f for fearful FACES
        h for happy FACES

        Press any key to begin the task
    KeyboardComponent emo_stroop_practice_end_ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine stroop_practice_feedback
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    CodeComponent stroop_practice_feedback_code
      Code Type = Auto->JS
      Begin Routine:
        # feedback on the practice trial just completed
        stroop_key_names = {'left': 'Left', 'down': 'Down', 'right': 'Right'}
        if stroop_practice_stroop_resp.corr:
            stroop_feedback_msg = 'Correct!'
        else:
            stroop_feedback_msg = ('Incorrect\n\nThe letters were ' + letterColor
                + ', so the correct key was ' + stroop_key_names[corrAns])
        if stroop_practice_stroop_resp.corr or (PILOTING and stroop_practice_stroop_resp.keys is None):
            stroop_practice_n_correct += 1  # (trials skipped with Tab while piloting count as correct)
    TextComponent stroop_practice_feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stroop_feedback_msg
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    TextComponent stroop_practice_feedback_keys
      letterHeight = 0.035
      pos = (0, -0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Left = red          Down = green          Right = blue
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    TextComponent stroop_practice_feedback_target
      letterHeight = 0.035
      pos = (0, 0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Respond to the COLOUR of the letters, not the word
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  Routine emo_stroop_practice_feedback
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    CodeComponent emo_stroop_practice_feedback_code
      Code Type = Auto->JS
      Begin Routine:
        # feedback on the practice trial just completed
        emo_stroop_face_names = {'fear': 'fearful', 'happy': 'happy'}
        if emo_stroop_practice_resp.corr:
            emo_stroop_feedback_msg = 'Correct!'
        else:
            emo_stroop_feedback_msg = ('Incorrect\n\nThe face was '
                + emo_stroop_face_names[faceEmotion] + ', so the correct key was ' + corrAns)
        if emo_stroop_practice_resp.corr or (PILOTING and emo_stroop_practice_resp.keys is None):
            emo_stroop_practice_n_correct += 1  # (trials skipped with Tab while piloting count as correct)
    TextComponent emo_stroop_practice_feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $emo_stroop_feedback_msg
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    TextComponent emo_stroop_practice_feedback_keys
      letterHeight = 0.035
      pos = (0, -0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = f = fearful          h = happy
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    TextComponent emo_stroop_practice_feedback_target
      letterHeight = 0.035
      pos = (0, 0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Respond to the emotion of the FACE, not the word
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  Routine stroop_practice_check
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    CodeComponent stroop_practice_check_code
      Code Type = Auto->JS
      Begin Routine:
        # repeat the practice once if fewer than 14 of 18 were correct
        thisExp.addData('stroop_practice_n_correct', stroop_practice_n_correct)
        if stroop_practice_n_correct >= 14 or stroop_practice_rounds.thisN >= 1:
            stroop_practice_rounds.finished = True
            continueRoutine = False  # skip this page
        stroop_practice_check_msg = ('You got ' + str(stroop_practice_n_correct)
            + ' out of 18 practice trials correct.\n\n'
            + 'You will now do the practice trials again.\n\n'
            + 'Remember, ignore the word itself; press:\nLeft for red LETTERS\nDown for green LETTERS\nRight for blue LETTERS'
            + '\n\nPress any key to begin the practice')
    TextComponent stroop_practice_check_stroop_instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $stroop_practice_check_msg
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    KeyboardComponent stroop_practice_check_stroop_ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine emo_stroop_practice_check
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    CodeComponent emo_stroop_practice_check_code
      Code Type = Auto->JS
      Begin Routine:
        # repeat the practice once if fewer than 9 of 12 were correct
        thisExp.addData('emo_stroop_practice_n_correct', emo_stroop_practice_n_correct)
        if emo_stroop_practice_n_correct >= 9 or emo_stroop_practice_rounds.thisN >= 1:
            emo_stroop_practice_rounds.finished = True
            continueRoutine = False  # skip this page
        emo_stroop_practice_check_msg = ('You got ' + str(emo_stroop_practice_n_correct)
            + ' out of 12 practice trials correct.\n\n'
            + 'You will now do the practice trials again.\n\n'
            + 'Remember, ignore the word; press:\nf for fearful FACES\nh for happy FACES'
            + '\n\nPress any key to begin the practice')
    TextComponent emo_stroop_practice_check_instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $emo_stroop_practice_check_msg
      units = height
      wrapWidth = 1.3
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    KeyboardComponent emo_stroop_practice_check_ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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Flow
  Routine volume_test
  Routine baseline_beliefs
  Routine general_instructions
  LoopInitiator big_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    Routine loop_order_code
    LoopInitiator control_condition loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = controlRegReps
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      conditions:
        [{'video_id': 'ng_78.mp4', 'vid_path': 'video_stimuli/ng_78.mp4', 'description': 'Woman talking about domestic abuse', 'att_check_question': 'Was the woman in the video happy?', 'answer': 'n'},
        {'video_id': 'ng_73.mp4', 'vid_path': 'video_stimuli/ng_73.mp4', 'description': 'BLM protest outside white house', 'att_check_question': 'Were the people in the video laughing together?', 'answer': 'n'},
        {'video_id': 'ng_10.mp4', 'vid_path': 'video_stimuli/ng_10.mp4', 'description': 'beirut bombing', 'att_check_question': 'Were the people in the video sad?', 'answer': 'y'},
        {'video_id': 'ng_18.mp4', 'vid_path': 'video_stimuli/ng_18.mp4', 'description': 'ambulance car crash?', 'att_check_question': 'Was the man in the video upset?', 'answer': 'y'},
        {'video_id': 'ng_80.mp4', 'vid_path': 'video_stimuli/ng_80.mp4', 'description': 'Charity Appeal - If London was Syria', 'att_check_question': 'Was the girl in the video upset and scared?', 'answer': 'y'},
        {'video_id': '0132_2.mp4', 'vid_path': 'video_stimuli/0132_2.mp4', 'description': 'Compilation of shame', 'att_check_question': 'Was the man in the video laughing?', 'answer': 'n'},
        {'video_id': 'ng_45.mp4', 'vid_path': 'video_stimuli/ng_45.mp4', 'description': 'San Fran Fent', 'att_check_question': 'Were the people in the video happy?', 'answer': 'n'},
        {'video_id': 'ng_84.mp4', 'vid_path': 'video_stimuli/ng_84.mp4', 'description': 'Injured child in ambulance', 'att_check_question': 'Was the child in the video happy?', 'answer': 'n'}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
      LoopInitiator control_instructions loopType="TrialHandler"
        conditions = [{'instructionText': "Later in today's session, you will be asked to perform a cognitive task for which you will receive a financial reward if you perform well. Emotions can be helpful in some circumstances but not in others. Researchers have found that experiencing intense emotions before engaging in this task will not hinder or enhance performance. \n                                                                                                                                   "}]
        conditionsFile = $'instructions_' + group + '_control.xlsx'
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator control_comprehension loopType="TrialHandler"
          conditions = []
          loopType = sequential
          nReps = 999
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          Routine instruct_introduction
          Routine instruct_questions
          Routine instruct_incorrect
        LoopTerminator control_comprehension
        Routine instruct_affect_rating
        Routine ready_routine
      LoopTerminator control_instructions
      Routine inter_stimulus_intervention
      LoopInitiator control_trials loopType="TrialHandler"
        Selected rows = 0:5
        conditionsFile = conditions_order/group3.xlsx
        loopType = fullRandom
        nReps = 1
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        conditions:
          [{'video_id': 'ng_83.mp4', 'vid_path': 'video_stimuli/ng_83.mp4', 'description': 'Man resists taser and attacks officer', 'att_check_question': 'Were the people in the video fighting?', 'answer': 'y'},
          {'video_id': 'ng_62.mp4', 'vid_path': 'video_stimuli/ng_62.mp4', 'description': 'Palestine hospital', 'att_check_question': 'Were the people in the video laughing?', 'answer': 'n'},
          {'video_id': 'ng_11.mp4', 'vid_path': 'video_stimuli/ng_11.mp4', 'description': 'indian police', 'att_check_question': 'Were the people in the video laughing?', 'answer': 'n'},
          {'video_id': 'ng_82.mp4', 'vid_path': 'video_stimuli/ng_82.mp4', 'description': 'Waterloo Road - Student has breakdown', 'att_check_question': 'Was the girl in the video upset?', 'answer': 'y'},
          {'video_id': 'ng_34.mp4', 'vid_path': 'video_stimuli/ng_34.mp4', 'description': 'cut seen soemone die', 'att_check_question': 'Was the lady in the video laughing?', 'answer': 'n'},
          {'video_id': 'ng_36.mp4', 'vid_path': 'video_stimuli/ng_36.mp4', 'description': 'hospital gaza', 'att_check_question': 'Was the boy in the video happy?', 'answer': 'n'},
          {'video_id': 'ng_27.mp4', 'vid_path': 'video_stimuli/ng_27.mp4', 'description': 'diddy rape victim', 'att_check_question': 'Was the lady in the video crying?', 'answer': 'y'},
          {'video_id': '0021.mp4', 'vid_path': 'video_stimuli/0021.mp4', 'description': 'mother cant recognise son', 'att_check_question': 'Was the man in the video upset?', 'answer': 'y'}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
        Routine control_video
        Routine inter_stimulus_intervention
        LoopInitiator affectRating_trials_control loopType="TrialHandler"
          conditionsFile = slider_conditions.xlsx
          loopType = fullRandom
          nReps = 1
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          conditions:
            [{'slider_name': 'valence', 'affect_low_path': 'slider_images_light/AS_unhappy_light.png', 'affect_high_path': 'slider_images_light/AS_happy_light.png'},
            {'slider_name': 'arousal', 'affect_low_path': 'slider_images_light/AS_sleepy_light.png', 'affect_high_path': 'slider_images_light/AS_wideawake_light.png'}]
          Routine affect_ratings
        LoopTerminator affectRating_trials_control
        Routine effort_rating
        Routine attention_check
      LoopTerminator control_trials
      Routine post_video_checks
      Routine post_video_strategy
      Routine video_end
      Routine stroop_instruct
      LoopInitiator stroop_practice_rounds loopType="TrialHandler"
        conditions = []
        loopType = sequential
        nReps = 2
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        LoopInitiator stroop_practice_trials loopType="TrialHandler"
          Selected rows = $stroop_practice_rows
          conditionsFile = strooptrialTypes.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
            {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
            {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
            {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
            {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
            {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
          Routine stroop_practice_trial
          Routine stroop_practice_feedback
        LoopTerminator stroop_practice_trials
        Routine stroop_practice_check
      LoopTerminator stroop_practice_rounds
      Routine stroop_practice_end
      LoopInitiator stroop_trials loopType="TrialHandler"
        conditionsFile = strooptrialTypes.xlsx
        loopType = random
        nReps = 5
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        conditions:
          [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
          {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
          {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
          {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
          {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
          {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
        Routine stroop_trial
      LoopTerminator stroop_trials
      Routine break_routine
    LoopTerminator control_condition
    LoopInitiator up_condition loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = upRegReps
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      LoopInitiator up_instructions loopType="TrialHandler"
        conditions = [{'instructionText': "Later in today's session, you will be asked to perform a cognitive task for which you will receive a financial reward if you perform well. Emotions can be helpful in some circumstances but not in others. Researchers have found that experiencing intense emotions before engaging in this task can enhance performance. \n\nWhen we experience intense emotions, the body's heightened state of arousal releases adrenaline, which can sharpen our ability to focus on key elements of the task. This adrenaline surge can lead to increased alertness, quicker reflexes, and heightened conce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
        conditionsFile = $'instructions_' + group + '_up.xlsx'
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator up_comprehension loopType="TrialHandler"
          conditions = []
          loopType = sequential
          nReps = 999
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          Routine instruct_introduction
          Routine instruct_questions
          Routine instruct_incorrect
        LoopTerminator up_comprehension
        Routine instruct_affect_rating
        Routine ready_routine
      LoopTerminator up_instructions
      Routine inter_stimulus_intervention
      LoopInitiator up_reg_trials loopType="TrialHandler"
        Selected rows = 0:5
        conditionsFile = conditions_order/group2.xlsx
        loopType = fullRandom
        nReps = 1
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        conditions:
          [{'video_id': 'ng_19.mp4', 'vid_path': 'video_stimuli/ng_19.mp4', 'description': 'ambulance dead child', 'att_check_question': 'Were the people in the video sad?', 'answer': 'y'},
          {'video_id': 'char_stim_9.mp4', 'vid_path': 'video_stimuli/char_stim_9.mp4', 'description': 'Charity appeal - FGM', 'att_check_question': 'Was the girl in the video crying?', 'answer': 'y'},
          {'video_id': 'ng_58.mp4', 'vid_path': 'video_stimuli/ng_58.mp4', 'description': 'Palestinian family crying over dead bodies', 'att_check_question': 'Were the people in the video upset?', 'answer': 'y'},
          {'video_id': 'ng_66.mp4', 'vid_path': 'video_stimuli/ng_66.mp4', 'description': 'Jewish protest in Israel', 'att_check_question': 'Were the people in the video fighting?', 'answer': 'y'},
          {'video_id': '0006_5.mp4', 'vid_path': 'video_stimuli/0006_5.mp4', 'description': 'homelessness - interview w girl', 'att_check_question': 'Was the girl in the interview happy?', 'answer': 'n'},
          {'video_id': 'ng_96.mp4', 'vid_path': 'video_stimuli/ng_96.mp4', 'description': 'Child has meltdown', 'att_check_question': 'Was the child in the video happy?', 'answer': 'n'},
          {'video_id': 'ng_44.mp4', 'vid_path': 'video_stimuli/ng_44.mp4', 'description': 'haiti funeral', 'att_check_question': 'Were the people in the video upset?', 'answer': 'y'},
          {'video_id': 'ng_50.mp4', 'vid_path': 'video_stimuli/ng_50.mp4', 'description': 'cop shoots woman', 'att_check_question': 'Did the lady have fun with the officers?', 'answer': 'n'}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
        Routine up_reg_video
        Routine inter_stimulus_intervention
        LoopInitiator affectRating_trials_up loopType="TrialHandler"
          conditionsFile = slider_conditions.xlsx
          loopType = fullRandom
          nReps = 1
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          conditions:
            [{'slider_name': 'valence', 'affect_low_path': 'slider_images_light/AS_unhappy_light.png', 'affect_high_path': 'slider_images_light/AS_happy_light.png'},
            {'slider_name': 'arousal', 'affect_low_path': 'slider_images_light/AS_sleepy_light.png', 'affect_high_path': 'slider_images_light/AS_wideawake_light.png'}]
          Routine affect_ratings
        LoopTerminator affectRating_trials_up
        Routine effort_rating
        Routine attention_check
      LoopTerminator up_reg_trials
      Routine post_video_checks
      Routine post_video_strategy
      Routine video_end
      Routine emo_stroop_instruct
      LoopInitiator emo_stroop_practice_rounds loopType="TrialHandler"
        conditions = []
        loopType = sequential
        nReps = 2
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        LoopInitiator emo_stroop_practice_trials loopType="TrialHandler"
          Selected rows = $emo_stroop_practice_rows
          conditionsFile = trialTypes.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'emotionText': 'FEAR', 'faceEmotion': 'happy', 'faceImagePath': '../bw_image/bw_PS_0236.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_KO_1082.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_RA_3483.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': '../bw_image/bw_JS_0281.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_DC_0952.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': '../bw_image/bw_JG_0024.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_MJ_0271.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': '../bw_image/bw_MG_0330.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_MR1_1519.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_MK1_0746.jpg', 'corrAns': None, 'congruent': None},
            {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': '../bw_image/bw_KS_0624.jpg', 'corrAns': None, 'congruent': None}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
          Routine emo_stroop_practice_trial
          Routine emo_stroop_practice_feedback
        LoopTerminator emo_stroop_practice_trials
        Routine emo_stroop_practice_check
      LoopTerminator emo_stroop_practice_rounds
      Routine emo_stroop_practice_end
      Routine emo_stroop_countdown
      LoopInitiator emo_stroop_trials loopType="TrialHandler"
        Selected rows = 1:31
        conditionsFile = trialTypes.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'emotionText': 'FEAR', 'faceEmotion': 'happy', 'faceImagePath': 'bw_image/bw_PS_0236.jpg', 'corrAns': 'h', 'congruent': 0.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_KO_1082.jpg', 'corrAns': 'f', 'congruent': 0.0},
          {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_RA_3483.jpg', 'corrAns': 'f', 'congruent': 1.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': 'bw_image/bw_JS_0281.jpg', 'corrAns': 'h', 'congruent': 1.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_DC_0952.jpg', 'corrAns': 'f', 'congruent': 0.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': 'bw_image/bw_JG_0024.jpg', 'corrAns': 'h', 'congruent': 1.0},
          {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_MJ_0271.jpg', 'corrAns': 'f', 'congruent': 1.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'happy', 'faceImagePath': 'bw_image/bw_MG_0330.jpg', 'corrAns': 'h', 'congruent': 1.0},
          {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_MR1_1519.jpg', 'corrAns': 'f', 'congruent': 1.0},
          {'emotionText': 'FEAR', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_MK1_0746.jpg', 'corrAns': 'f', 'congruent': 1.0},
          {'emotionText': 'HAPPY', 'faceEmotion': 'fear', 'faceImagePath': 'bw_image/bw_KS_0624.jpg', 'corrAns': 'f', 'congruent': 0.0}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
        Routine emo_stroop_trial
      LoopTerminator emo_stroop_trials
      Routine break_routine
    LoopTerminator up_condition
    LoopInitiator down_condition loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = downRegReps
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      LoopInitiator down_instructions loopType="TrialHandler"
        conditions = [{'instructionText': "Later in today's session, you will be asked to perform a cognitive task for which you will receive a financial reward if you perform well. Emotions can be helpful in some circumstances but not in others. Researchers have found that experiencing intense emotions before engaging in this task can hinder performance. \n\nWhen we experience intense emotions, the body's heightened state of arousal releases adrenaline, which can disrupt our ability to focus on key elements of the task. This adrenaline rush can cause heightened anxiety, impaired decision-making, and difficulty co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
        conditionsFile = $'instructions_' + group + '_down.xlsx'
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator down_comprehension loopType="TrialHandler"
          conditions = []
          loopType = sequential
          nReps = 999
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          Routine instruct_introduction
          Routine instruct_questions
          Routine instruct_incorrect
        LoopTerminator down_comprehension
        Routine instruct_affect_rating
        Routine ready_routine
      LoopTerminator down_instructions
      Routine inter_stimulus_intervention
      LoopInitiator down_reg_trials loopType="TrialHandler"
        Selected rows = 0:5
        conditionsFile = conditions_order/group1.xlsx
        loopType = fullRandom
        nReps = 1
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        conditions:
          [{'video_id': 'ng_78.mp4', 'vid_path': 'video_stimuli/ng_78.mp4', 'description': 'Woman talking about domestic abuse', 'att_check_question': 'Was the woman in the video happy?', 'answer': 'n'},
          {'video_id': 'ng_73.mp4', 'vid_path': 'video_stimuli/ng_73.mp4', 'description': 'BLM protest outside white house', 'att_check_question': 'Were the people in the video laughing together?', 'answer': 'n'},
          {'video_id': 'ng_10.mp4', 'vid_path': 'video_stimuli/ng_10.mp4', 'description': 'beirut bombing', 'att_check_question': 'Were the people in the video sad?', 'answer': 'y'},
          {'video_id': 'ng_18.mp4', 'vid_path': 'video_stimuli/ng_18.mp4', 'description': 'ambulance car crash?', 'att_check_question': 'Was the man in the video upset?', 'answer': 'y'},
          {'video_id': 'ng_80.mp4', 'vid_path': 'video_stimuli/ng_80.mp4', 'description': 'Charity Appeal - If London was Syria', 'att_check_question': 'Was the girl in the video upset and scared?', 'answer': 'y'},
          {'video_id': '0132_2.mp4', 'vid_path': 'video_stimuli/0132_2.mp4', 'description': 'Compilation of shame', 'att_check_question': 'Was the man in the video laughing?', 'answer': 'n'},
          {'video_id': 'ng_45.mp4', 'vid_path': 'video_stimuli/ng_45.mp4', 'description': 'San Fran Fent', 'att_check_question': 'Were the people in the video happy?', 'answer': 'n'},
          {'video_id': 'ng_84.mp4', 'vid_path': 'video_stimuli/ng_84.mp4', 'description': 'Injured child in ambulance', 'att_check_question': 'Was the child in the video happy?', 'answer': 'n'}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
        Routine down_reg_video
        Routine inter_stimulus_intervention
        LoopInitiator affectRating_trials_down loopType="TrialHandler"
          conditionsFile = slider_conditions.xlsx
          loopType = fullRandom
          nReps = 1
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          conditions:
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          Routine affect_ratings
        LoopTerminator affectRating_trials_down
        Routine effort_rating
        Routine attention_check
      LoopTerminator down_reg_trials
      Routine post_video_checks
      Routine post_video_strategy
      Routine video_end
      Routine down_corsi_block_instructions
      LoopInitiator corsi_task loopType="TrialHandler"
        loopType = random
        nReps = 5
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        Routine ISI
        LoopInitiator block_sequence loopType="TrialHandler"
          loopType = random
          nReps = nBlocks
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          Routine corsi_present
        LoopTerminator block_sequence
        Routine corsi_respond
        Routine down_feedback
      LoopTerminator corsi_task
      Routine corsi_end
      Routine break_routine
    LoopTerminator down_condition
    Routine loop_counter
  LoopTerminator big_loop
  Routine demand_probe_1
  Routine experiment_end
